PsychoPy2experiment version="2022.1.2"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  color = -1.0000, -1.0000, -1.0000
  expName = Patch_Foraging
  keyboardBackend = ioHub
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Routines
  Routine Welcome
    TextComponent Welcometext
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Welcome
        Please press Spacebar to start
    KeyboardComponent exp_start
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine End
    TextComponent text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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      text:
        This is the end of first trial, now next trial will begin.
        Thank you
  Routine ViewPatch
    CodeComponent view
      Code Type = Py
      Before Experiment:
        import os
        from psychopy import visual, event, core, data
        import random
      Begin Experiment:
        competitors = [[1,4],[5,1],[2,5]]
        state = random.randint(0,2)
        l_c = competitors[state][0]
        r_c = competitors[state][1]

        rect_l = []
        rect_r = []
      Begin Routine:
        clock = core.Clock()

        c1 = -250
        c2 = 250
        box1 = visual.Rect(
            win=win,
            units="pix",
            width=400,
            height=600,
            fillColor= 'black',
            lineColor=[-1, -1, 1]
        )
        box1.pos = [c1,0]
        box2 = visual.Rect(
            win=win,
            units="pix",
            width=400,
            height=600,
            fillColor= 'black',
            lineColor=[-1, -1, 1]
        )
        box2.pos = [c2,0]


        for i in range(l_c):
            rect_x = visual.Rect(win, units="pix",
                width=30,
                height=30,
                fillColor= 'yellow')
            rect_l.append(rect_x)

        for i in range(r_c):
            rect_x = visual.Rect(win, units="pix",
                width=30,
                height=30,
                fillColor= 'yellow')
            rect_r.append(rect_x)
        for i in range(l_c):
            x = random.uniform(-1, 1)
            y = random.uniform(-1,1)
            x = x*185
            y = y*285
            rect_l[i].pos = [c1+x,y]

        for i in range(r_c):
            x = random.uniform(-1, 1)
            y = random.uniform(-1,1)
            x = x*185
            y = y*285
            rect_r[i].pos = [c2+x,y]

        clock.reset()
        while clock.getTime() < 5: # draw moving stimulus
            box1.draw()
            box2.draw()
            for i in range(l_c):
                rect_l[i].draw()
            for i in range(r_c):
                rect_r[i].draw()
            win.flip() # make the drawn things visible
      End Routine:
        thisExp.addData('left_competitors', l_c)
        thisExp.addData('right_competitors', r_c)
  Routine Patch_Selection
    KeyboardComponent key_resp
      allowedKeys = 'left','right'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine Foraging
    CodeComponent code_2
      Code Type = Py
      Before Experiment:
        import os
        from psychopy import visual, event, core
        import random
      Begin Routine:
        box = visual.Rect(
            win=win,
            units="pix",
            width=400,
            height=600,
            fillColor= 'black',
            lineColor=[-1, -1, 1]
        )
        box.draw()

        data = thisExp.getAllEntries()
        key = data[0]['key_resp.keys']

        if key == 'left':
            for i in range(len(rect_l)):
                position = rect_l[i].pos
                position[0] -= -250
                rect_l[i].pos = position
            #
            n = len(rect_l)
            p = random.randint(0,n-1)
            print(key)
            clock = core.Clock()

            LEFT = -10
            RIGHT = 10
            rect = visual.Rect(
                win=win,
                units="pix",
                width=400,
                height=600,
                fillColor= 'black',
                lineColor=[-1, -1, 1]
            )
            reward = visual.Rect(win, units="pix",
                width=30,
                height=30,
                fillColor= [-0.0039,1,-1])
            clock.reset()
            p_pos = rect_l[p].pos
        #    print(p_pos)
            while clock.getTime()<10: # draw moving stimulus

                k = event.getKeys()
                if k: # if there was an actual key pressed:
                    if k[0] == 'left':
                        p_pos[0] += LEFT
                    elif k[0] == 'right':
                        p_pos[0] += RIGHT
                    elif k[0] == 'up':
                        p_pos[1] += RIGHT
                    elif k[0] == 'down':
                        p_pos[1] += LEFT
                    elif k[0] == 'q':
                        core.quit()
            #
                if p_pos[0] > (200-15):
                    p_pos[0] = (200-15)
                elif p_pos[0]<-(200-15):
                    p_pos[0] = -(200-15)
                if p_pos[1]> (300-15):
                    p_pos[1] = (300-15)
                elif p_pos[1]<-(300-15):
                    p_pos[1] = -(300-15)

                rect_l[p].pos = p_pos # directly update both x *and* y
                box.draw()
                for i in range(n):
                    rect_l[i].draw()

                reward.draw()
                win.flip() # make the drawn things visible
        else:
            for i in range(len(rect_r)):
                position = rect_r[i].pos
                position[0] -= 250
                rect_r[i].pos = position
            #
            n = len(rect_r)
            p = random.randint(0,n-1)
            print(key)
            clock = core.Clock()

            LEFT = -10
            RIGHT = 10
            rect = visual.Rect(
                win=win,
                units="pix",
                width=400,
                height=600,
                fillColor= 'black',
                lineColor=[-1, -1, 1]
            )
            reward = visual.Rect(win, units="pix",
                width=30,
                height=30,
                fillColor= [-0.0039,1,-1])
            clock.reset()
            p_pos = rect_r[p].pos
        #    print(p_pos)
            while clock.getTime()<10: # draw moving stimulus

                k = event.getKeys()
                if k: # if there was an actual key pressed:
                    if k[0] == 'left':
                        p_pos[0] += LEFT
                    elif k[0] == 'right':
                        p_pos[0] += RIGHT
                    elif k[0] == 'up':
                        p_pos[1] += RIGHT
                    elif k[0] == 'down':
                        p_pos[1] += LEFT
                    elif k[0] == 'q':
                        core.quit()
            #
                if p_pos[0] > (200-15):
                    p_pos[0] = (200-15)
                elif p_pos[0]<-(200-15):
                    p_pos[0] = -(200-15)
                if p_pos[1]> (300-15):
                    p_pos[1] = (300-15)
                elif p_pos[1]<-(300-15):
                    p_pos[1] = -(300-15)

                rect_r[p].pos = p_pos # directly update both x *and* y
                box.draw()
                for i in range(n):
                    rect_r[i].draw()

                reward.draw()
                win.flip() # make the drawn things visible
  Routine routine_1
  Routine left
  Routine routine
  Routine Forage
    CodeComponent code
      Code Type = Py
      Begin Routine:
        import os
        from psychopy import visual, event, core

        win = visual.Window(units = 'pix', color = 'black') # Set the window

        x = 0 # initial positions
        y = 0

        LEFT = -100
        RIGHT = 100

        # create just once, no need to specify a position yet:
        circle = visual.Circle(win, radius = 10, fillColor= 'yellow')

        while True: # draw moving stimulus

            k = event.getKeys()
            if k: # if there was an actual key pressed:
                if k[0] == 'left':
                    x = LEFT
                elif k[0] == 'right':
                    x = RIGHT
                elif k[0] == 'q':
                    core.quit()

            y += 2 # make circle constantly move upwards
            circle.pos = [x, y] # directly update both x *and* y
            circle.draw()
            win.flip() # make the drawn things visible

        win.close()
        core.quit()
Flow
  Routine Welcome
  Routine ViewPatch
  Routine Patch_Selection
  Routine Foraging
  Routine End
